Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img6.png % % B B 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img2.png % % C C 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img9.png % % D D 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img4.png % % E E 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img1.png % % F F 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img3.png % % G G 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img5.png % % H H 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img8.png % % I I 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Actividades/Lavarse%20las%20manos/img7.png % % // speller target properties